PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = 1
  keyboardBackend = PsychToolbox
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Routines
  Routine WelcomeScreen
    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!



        Please complete this experiment in one sitting, in a quiet place free of distractions.

        Press <Enter> to begin.
    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        psychoJS.eventManager.clearEvents('keyboard')
      Each Frame:
        keys = psychoJS.eventManager.getKeys()
        if len(keys):
            if 'return' in keys :
                continueRoutine = False
  Routine BlankScreen
    TextComponent textBlank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine InstructionScreen1
    TextComponent textInstruction1
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        For this task, you will be given a category, and be asked to type 20 items from that category.

        For example, if the category is “musical instruments”, you should type 20 instruments.

        You will type your items into a textbox. Only type one item at a time, then press <Enter>.

        Do not enter the same item twice, or the same root word with different suffixes. For example, if you list “guitar”, do not also list “guitars.”

        You will have as much time as you need to enter 20 items – just press <Enter> after each one.

        Press <Enter> to get started.
    CodeComponent code_4
      Code Type = Both
      Before JS Experiment:
        // Define the combo function
        var combo_list = new Array();
        var combo_listP = new Array();

        Array.prototype.append = [].push;

        // Initialize an index
        combo_num = 0
        list_num = 0
        combo_numP = 0
    CodeComponent code_14
      Code Type = Both
      Before JS Experiment:
        var combo_listP = new Array();

        Array.prototype.append = [].push;
      Begin JS Routine:
        psychoJS.eventManager.clearEvents("keyboard");
      Begin Routine:
        psychoJS.eventManager.clearEvents('keyboard')
      Each Frame:
        keys = psychoJS.eventManager.getKeys()
        if len(keys):
            if 'return' in keys :
                continueRoutine = False
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys();
        if (keys.length) {
            if (_pj.in_es6("return", keys)) {
                continueRoutine = false;
            }
        }
  Routine AUTResponse
    TextComponent textInstruction
      letterHeight = 0.06
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Category: ANIMALS

        Type an animal below, then press <Enter> to type another animal:
    TextboxComponent textbox1
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent counter_response
      letterHeight = 0.03
      pos = (0.7, 0.4)
      startVal [time (s)] = 0.0
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        psychoJS.eventManager.clearEvents('keyboard')
      Each Frame:
        keys = psychoJS.eventManager.getKeys()
        if len(keys):
            if 'return' in keys :
                continueRoutine = False
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        response=0
      Begin Routine:
        textbox1.refresh()
        response=response+1
        counter_response.text=str(response) + " of 20"
      Each Frame:
        textbox1._pixi.focus()
  Routine Check
    TextComponent textCheck
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        If your answer is correct, please directly click the <continue> button.

        If not, type your new response on the right and click the <continue> button.
    TextComponent textCheckReponse
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $textbox1.text
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    TextboxComponent textbox12
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (None,None)
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        textbox2.refresh()
      Each Frame:
        textbox2._pixi.focus()
    TextComponent textContinue44
      letterHeight = 0.03
      pos = (0.7, -0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = Continue
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    MouseComponent mouseContinue44
      clickable = textContinue4
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Compare
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        chose = 0
        tmp = []
        combo_num = 0
        m2=[]
        for i in range(190):
            m2.append(i)
        for i in range(len(m2)):
            chose = randint(0,len(m2)-1)
            tmp.append(m2[chose])
            m2 = m2[:chose] + m2[chose + 1:]
      Begin Routine:
        def n_length_combo(lst, n):
            if n == 0:
                return [[]]
            l =[]
            for i in range(0, len(lst)):
                m = lst[i]
                remLst = lst[i+1:]
                remainlst_combo = n_length_combo(remLst, n-1)
                for p in remainlst_combo:
                     l.append([m, *p])
            return l

        new_array = n_length_combo(combo_list, 2)
        new_array2 = util.shuffle(new_array)
        print(new_array)
  Routine routine_1
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        print(type(combo_list))
  Routine ThankYouScreen
    TextComponent text
      letterHeight = 0.037
      startVal [time (s)] = 0.0
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      text:
        **Please read the following to receive credit**

        Thank you so much for your participation!  You have now completed the study.  After pressing Enter on this page, you will see an orange warning message, followed by a green message stating “Thank you for your patience”.  Click OK when you see this message.  Then you may safely close the page.

        We hope you have a nice day:)

        Press <Enter> to end the experiment.
    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Routine:
        psychoJS.eventManager.clearEvents('keyboard')
      Each Frame:
        keys = psychoJS.eventManager.getKeys()
        if len(keys):
            if 'return' in keys :
                continueRoutine = False
  Routine CheckResponse
    TextComponent text_Check
      letterHeight = 0.1
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        text_Check.text = combo_list[list_num]
    TextComponent counter_check
      letterHeight = 0.03
      pos = (0.7, 0.4)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox2
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        psychoJS.eventManager.clearEvents('keyboard')
      Each Frame:
        keys = psychoJS.eventManager.getKeys()
        if len(keys):
            if 'return' in keys :
                continueRoutine = False
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        check=0
      Begin Routine:
        textbox2.refresh()
        check=check+1
        counter_check.text= str(check) +" 0f 20"
      Each Frame:
        textbox2._pixi.focus()
  Routine Add
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        combo_list.append(textbox1.text)
        print(combo_list)
  Routine InstructionScreen2
    TextComponent textInstruction2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Next, we will check the spelling of the animals you typed.

        On the next screen, we will cycle through each animal.

        If the animal spelling is correct, you can simply press <Enter>.

        If the animal is misspelled, just type the correct spelling, then press <Enter>.

        Press <Enter> to begin spellchecking.
    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        psychoJS.eventManager.clearEvents('keyboard')
      Each Frame:
        keys = psychoJS.eventManager.getKeys()
        if len(keys):
            if 'return' in keys :
                continueRoutine = False
  Routine InstructionScreen3
    TextComponent textInstruction3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Next, you will see all the animal names you typed again. This time, you will see two animal names at a time. Your job is to rate how RELATED you think these two words are to each other.

        You will use a sliding scale, ranging from 1 (highly UNRELATED) to 9 (highly RELATED). Use the mouse to move the slider on the scale, then press the <Space> key to proceed to the next trial.

        Try to give a quick, intuitive judgement, without thinking too much about it.

        Press <Enter> to practice the task with words from the FOOD category.
    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        psychoJS.eventManager.clearEvents('keyboard')
      Each Frame:
        keys = psychoJS.eventManager.getKeys()
        if len(keys):
            if 'return' in keys :
                continueRoutine = False
    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Experiment:
        combo_listP.append("apple")
        combo_listP.append("banana")
        combo_listP.append("cereal")

        m1=[]
        for i in range(3):
            m1.append(i)
        combo_numP = 0
        choseP = 0
        tmpP = []

        for i in range(len(m1)):
            choseP = randint(0,len(m1)-1)
            tmpP.append(m1[choseP])
            m1 = m1[:choseP] + m1[choseP + 1:]
      Begin Routine:
        def n_length_combo(lst, n):
            if n == 0:
                return [[]]
            l =[]

            for i in range(0, len(lst)):
                m = lst[i]
                remLst = lst[i + 1:]
                remainlst_combo = n_length_combo(remLst, n-1)
                for p in remainlst_combo:
                     l.append([m, *p])
            return l

        new_arrayP = n_length_combo(combo_listP, 2)
        new_arrayP2 = util.shuffle(new_arrayP)
        print(new_arrayP)
  Routine Change
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:

        psychoJS.eventManager.clearEvents('keyboard')
      Each Frame:
        if len(textbox2.text)>=2 and textbox2.text != "":
            combo_list[list_num] = textbox2.text
        else:
            combo_list[list_num] = text_Check.text


        keys = psychoJS.eventManager.getKeys()
        if len(keys):
            if 'return' in keys :
                continueRoutine = False
      End Routine:
        list_num = list_num +1
  Routine RJT
    TextComponent combo_1
      letterHeight = 0.1
      pos = (-0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent combo_2
      letterHeight = 0.1
      pos = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent Unrelated
      letterHeight = 0.05
      pos = (-0.4, -0.1)
      startVal [time (s)] = 0.0
      text = highly UNRELATED
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    TextComponent Related
      letterHeight = 0.05
      pos = (0.4, -0.1)
      startVal [time (s)] = 0.0
      text = highly RELATED
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0.03, -0.35)
      size = (0.9, 0.12)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    TextComponent currVal1
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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    TextComponent textScales
      letterHeight = 0.036
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text =       1         2         3         4         5         6         7         8         9
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    TextComponent rjt_text
      letterHeight = 0.03
      pos = (0.7, 0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider.rating
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    TextComponent textIntro2
      letterHeight = 0.02
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Click and drag the circle, then press <Space> to proceed.
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        SJTcounter = 0
      Begin Routine:
        if SJTcounter == 0:
            combo_1.text = combo_list[0]
            combo_2.text = combo_list[0]

        if SJTcounter != 0:
            combo_1.text = new_array2[combo_num][0]
            combo_2.text = new_array2[combo_num][1]
            combo_num = combo_num + 1

        markerSize = util.to_px(slider.size, 'height', psychoJS.window)[1];

        slider.markerPos = 5

        SJTcounter = SJTcounter + 1

        rjt_text.text = str(SJTcounter) + ' of' + ' 39'

        slide1rating = ''
        slide1rt = ''
      Each Frame:
        cVal1 = slider.markerPos
        currVal1.text = Math.round(cVal1 * 100.0) / 100.0
      End Routine:
        slide1rating = slider.getRating()
        slide1rt = slider.getRT()

        if SJTcounter == 39:
            SJTcounter = 0

        psychoJS.experiment.addData("word1", combo_1.text)
        psychoJS.experiment.addData("word2", combo_2.text)
        psychoJS.experiment.addData("rating", slide1rating)
        psychoJS.experiment.addData("rjt_RT", slide1rt)
  Routine Category
    TextComponent text_2
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = Category: Animals
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    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Routine:
        psychoJS.eventManager.clearEvents('keyboard')
      Each Frame:
        keys = psychoJS.eventManager.getKeys()
        if len(keys):
            if 'return' in keys :
                continueRoutine = False
  Routine Break
    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Thanks. You can take a short break if you want, or you can keep going.
    TextComponent counter_text2
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        block_counter = 5
      Begin Routine:
        block_counter = block_counter - 1
        counter_text2.text = "You have " + str(block_counter) + " of 5 rounds left."
    TextComponent text_4
      letterHeight = 0.04
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Press <Enter> to continue.
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    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Routine:
        psychoJS.eventManager.clearEvents('keyboard')
      Each Frame:
        keys = psychoJS.eventManager.getKeys()
        if len(keys):
            if 'return' in keys :
                continueRoutine = False
  Routine Practice
    TextComponent combo_1P
      letterHeight = 0.1
      pos = (-0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent combo_2P
      letterHeight = 0.1
      pos = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent unrelatedP
      letterHeight = 0.05
      pos = (-0.4, -0.1)
      startVal [time (s)] = 0.0
      text = highly UNRELATED
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    TextComponent relatedP
      letterHeight = 0.05
      pos = (0.4, -0.1)
      startVal [time (s)] = 0.0
      text = highly RELATED
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    SliderComponent slider_2
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0.03, -0.35)
      size = (0.9, 0.12)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    TextComponent curV1
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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    TextComponent textScale
      letterHeight = 0.036
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text =       1         2         3         4         5         6         7         8         9
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    TextComponent rjttext
      letterHeight = 0.03
      pos = (0.7, 0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider_2.rating
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    TextComponent text_Intro
      letterHeight = 0.02
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Click and drag the circle, then press <Space> to proceed.
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    CodeComponent code_21
      Code Type = Auto->JS
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      Begin Experiment:
        SJTcounterP = 0
      Begin Routine:
        combo_1P.text = new_arrayP2[combo_numP][0]
        combo_2P.text = new_arrayP2[combo_numP][1]
        combo_numP = combo_numP + 1

        markerSize = util.to_px(slider_2.size, 'height', psychoJS.window)[1];

        slider_2.markerPos = 5

        SJTcounterP = SJTcounterP + 1

        rjttext.text = str(SJTcounterP) + ' of' + ' 3'

        slide2rating = ''
        slide2rt = ''
      Each Frame:
        cVal2 = slider_2.markerPos
        curV1.text = Math.round(cVal2 * 100.0) / 100.0
      End Routine:
        slide2rating = slider_2.getRating()
        slide2rt = slider_2.getRT()

        if SJTcounterP == 3:
            SJTcounterP = 0

        psychoJS.experiment.addData("word1", combo_1P.text)
        psychoJS.experiment.addData("word2", combo_2P.text)
        psychoJS.experiment.addData("rating", slide2rating)
        psychoJS.experiment.addData("rjt_RT", slide2rt)
  Routine InstructionScreen4
    TextComponent text_5
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Okay, now you are ready to get started with the main task.

        You will complete 5 rounds of the task. Each round will have 39 trials. After each round, you can take an optional short break.

        You can keep track of the trials at the top right corner of the screen.

        Occasionally, you will see the same word twice. Here, you should select 9 (highly RELATED).

        Remember to give a quick, intuitive judgement, without thinking too much about it.

        Press <Enter> to begin.
    CodeComponent code_22
      Code Type = Auto->JS
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      Begin Routine:
        psychoJS.eventManager.clearEvents('keyboard')
      Each Frame:
        keys = psychoJS.eventManager.getKeys()
        if len(keys):
            if 'return' in keys :
                continueRoutine = False
Flow
  Routine WelcomeScreen
  Routine BlankScreen
  Routine BlankScreen
  Routine InstructionScreen1
  Routine BlankScreen
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 20
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    Routine AUTResponse
    Routine BlankScreen
    Routine Add
  LoopTerminator trials
  Routine InstructionScreen2
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 20
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    Routine CheckResponse
    Routine Change
  LoopTerminator trials_3
  Routine InstructionScreen3
  Routine BlankScreen
  LoopInitiator trials_5 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine Practice
  LoopTerminator trials_5
  Routine InstructionScreen4
  Routine Compare
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    LoopInitiator trials_4 loopType="TrialHandler"
      loopType = random
      nReps = 39
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      Routine RJT
    LoopTerminator trials_4
    Routine Break
  LoopTerminator trials_2
  Routine ThankYouScreen
